CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does contain "Position 38")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:0..._
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "DHB-Venus_KTR_live-20210519T071242Z-001") (file does contain "ch00")
    Name to assign these images:KTR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "DHB-Venus_KTR_live-20210519T071242Z-001") (file does contain "ch02")
    Name to assign these images:Original_DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "DHB-Venus_KTR_live-20210519T071242Z-001\\edited") (file does contain ".tif_edited.tif")
    Name to assign these images:Edited_DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "cellposemasks")
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    Name to assign these objects:Cell_mask_raw
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

EditObjectsManually:[module_num:5|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
    Select the objects to be edited:Cell_mask_raw
    Name the edited objects:Cell_mask
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:KTR
    Allow overlapping objects?:No

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Edited_DAPI
    Name the primary objects to be identified:Nucleus_raw
    Typical diameter of objects, in pixel units (Min,Max):18,31
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

EditObjectsManually:[module_num:7|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
    Select the objects to be edited:Nucleus_raw
    Name the edited objects:Nucleus
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Edited_DAPI
    Allow overlapping objects?:No

RelateObjects:[module_num:8|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
    Parent objects:Nucleus
    Child objects:Cell_mask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:_combinedset
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:_combinedset
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:_combinedset
    Select the smaller identified objects:Cytoplasm
    Name the tertiary objects to be identified:Nucleus_2
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:_combinedset
    Select the smaller identified objects:Cytoplasm
    Name the tertiary objects to be identified:Nucleus_2_fortracking
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Nucleus
    Select the smaller identified objects:Nucleus_2
    Name the tertiary objects to be identified:Leftover_nucleus
    Shrink smaller object prior to subtraction?:No

IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Leftover_nucleus
    Name the objects to be identified:Leftover_cytoplasm
    Select the method to identify the secondary objects:Distance - N
    Select the input image:KTR
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
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
DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:_combinedset
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:KTR
    Text color:red
    Name the output image that has the measurements displayed:LabelledImage1
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:Nucleus_2
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Edited_DAPI
    Text color:red
    Name the output image that has the measurements displayed:LabelledImage2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
MeasureObjectIntensity:[module_num:16|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
    Select images to measure:KTR, Original_DAPI
    Select objects to measure:Cytoplasm, Leftover_cytoplasm, Leftover_nucleus, Nucleus_2

MeasureObjectIntensityDistribution:[module_num:17|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
    Select images to measure:KTR, Original_DAPI
    Hidden:4
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nucleus_2
    Object to use as center?:These objects
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    Select objects to measure:Leftover_nucleus
    Object to use as center?:These objects
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    Select objects to measure:Leftover_cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:No
    Number of bins:4
    Maximum radius:100

MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Nucleus_2
    Select neighboring objects to measure:Nucleus_2
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Cytoplasm, Leftover_cytoplasm, Leftover_nucleus, Nucleus_2
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

TrackObjects:[module_num:20|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
    Choose a tracking method:Distance
    Select the objects to track:Nucleus_2_fortracking
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    Maximum pixel distance to consider matches:100
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells_trial
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    Filter objects by lifetime?:No
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
TrackObjects:[module_num:21|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
    Choose a tracking method:Distance
    Select the objects to track:Nucleus_2
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    Maximum pixel distance to consider matches:100
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:No
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
ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|OneDrive - NUS High School\\Documents\\College\\Junior\\Winter\\Cambridge\\Winter\\CellCycleData\\Segmentation_edited\\Position38
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nucleus_2_fortracking|TrackObjects_FinalAge_100,Nucleus_2_fortracking|TrackObjects_ParentImageNumber_100,Nucleus_2_fortracking|TrackObjects_Label_100,Nucleus_2_fortracking|TrackObjects_DistanceTraveled_100,Nucleus_2_fortracking|TrackObjects_Displacement_100,Nucleus_2_fortracking|TrackObjects_Linearity_100,Nucleus_2_fortracking|TrackObjects_Lifetime_100,Nucleus_2_fortracking|TrackObjects_TrajectoryY_100,Nucleus_2_fortracking|TrackObjects_ParentObjectNumber_100,Nucleus_2_fortracking|TrackObjects_IntegratedDistance_100,Nucleus_2_fortracking|TrackObjects_TrajectoryX_100,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:Sequential numbers
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    Enter single file name:TrackedCells
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OneDrive - NUS High School\\Documents\\College\\Junior\\Winter\\Cambridge\\Winter\\CellCycleData\\Segmentation_edited\\Position38
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells_trial
    Select method for constructing file names:Sequential numbers
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    Enter single file name:TrackedCells_trial
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OneDrive - NUS High School\\Documents\\College\\Junior\\Winter\\Cambridge\\Winter\\CellCycleData\\Segmentation_edited\\Position38
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:LabelledImage1
    Select method for constructing file names:Sequential numbers
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    Enter single file name:LabelledCellNumber
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OneDrive - NUS High School\\Documents\\College\\Junior\\Winter\\Cambridge\\Winter\\CellCycleData\\Segmentation_edited\\Position38
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:LabelledImage2
    Select method for constructing file names:Sequential numbers
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    Enter single file name:LabelledNucleusNumber
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|OneDrive - NUS High School\\Documents\\College\\Junior\\Winter\\Cambridge\\Winter\\CellCycleData\\Segmentation_edited\\Position38
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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